PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'taskVer': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1088, 614]
  expName = vSearchNewAlpha4
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Routines
  Routine end
    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the experiment. Thank you for your time. Please remember to return to the questionnaire to carry on with the study. Press ‘space’ to exit.
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    TextComponent trialFix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent trialL11
      image = L1.png
      pos [set every repeat] = [loc1,loc2]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL12
      image = L1.png
      pos [set every repeat] = [loc3,loc4]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL21
      image = L2.png
      pos [set every repeat] = [loc5,loc6]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL22
      image = L2.png
      pos [set every repeat] = [loc7,loc8]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT11
      image = T1.png
      pos [set every repeat] = [loc9,loc10]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT12
      image = T1.png
      pos [set every repeat] = [loc11,loc12]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL13
      image = L1.png
      pos [set every repeat] = (loc13, loc14)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL14
      image = L1.png
      pos [set every repeat] = (loc15, loc16)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL23
      image = L1.png
      pos [set every repeat] = (loc17, loc18)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL24
      image = L2.png
      pos [set every repeat] = (loc19, loc20)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT13
      image = T1.png
      pos [set every repeat] = (loc21, loc22)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT14
      image = T1.png
      pos [set every repeat] = (loc23, loc24)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL15
      image = L1.png
      pos [set every repeat] = (loc25, loc26)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL16
      image = L1.png
      pos [set every repeat] = (loc27, loc28)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL25
      image = L2.png
      pos [set every repeat] = (loc29, loc30)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL26
      image = L2.png
      pos [set every repeat] = (loc31, loc32)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT15
      image = T1.png
      pos [set every repeat] = (loc33, loc34)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT16
      image = T1.png
      pos [set every repeat] = (loc35, loc36)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialTT
      image = TT.png
      pos [set every repeat] = [loc37,loc38]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    KeyboardComponent trialResp
      allowedKeys = 'x','m',',','n','j','k','z','c','s','d'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine setup
    CodeComponent JSCode
      Code Type = JS
      Begin JS Experiment:
        // Code to fix reference errors in JS
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        document.documentElement.style.cursor = 'none';
        // Math related fixes
        pi = Math.PI;
        sin = Math.sin;
        cos = Math.cos;
        sqrt = Math.sqrt;
      End JS Experiment:
        document.documentElement.style.cursor = 'auto';
  Routine instr
    CodeComponent instrCode
      Code Type = Auto->JS
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      Begin Routine:
        if condsFile == "vSearch1Cond.xlsx":
            instrText.text = "In this task you will see sets of shapes made of four different shapes as outlined below. Only press the ‘x’ key if you see the upright “T” shape, which is the last shape. Otherwise, press the ‘m’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘enter’ to continue."
        elif condsFile == "vSearch2Cond.xlsx":
            instrText.text = "A quick break before the next set of trials. Remember, only press the ‘x’ key if you see the upright “T” shape, which is the last shape below. Otherwise, press the ‘m’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘enter’ to continue."
        elif condsFile == "vSearchCond.xlsx":
            instrText.text = "A quick break before the next set of trials. Remember, only press the ‘x’ key if you see the upright “T” shape, which is the last shape below. Otherwise, press the ‘m’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘enter’ to continue."
        else:
            instrText.text = "A quick break before the next set of trials. Remember, only press the ‘x’ key if you see the upright “T” shape, which is the last shape below. Otherwise, press the ‘m’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘enter’ to continue."
    TextComponent instrText
      letterHeight = 0.05
      pos = [0,0.1]
      startVal [time (s)] = 0.0
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    KeyboardComponent instrResp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent l1ex
      image = L1.png
      pos = (-0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent l2ex
      image = L2.png
      pos = (-0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent t1ex
      image = T1.png
      pos = (0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent tTex
      image = TT.png
      pos = (0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  LoopInitiator taskLoop loopType="TrialHandler"
    conditionsFile = taskCond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'vSearch1Cond.xlsx')]),
      OrderedDict([('condsFile', 'vSearch2Cond.xlsx')]),
      OrderedDict([('condsFile', 'vSearch3Cond.xlsx')])]
    Routine instr
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = fullRandom
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator taskLoop
  Routine end
